PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = vSearchNewAlpha3
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Routines
  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    TextComponent trial2Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial2L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L23
      image = L2.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2TT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trial2Resp
      allowedKeys = 's','k','w','e','a','d','z','x','i','o','j','m',',','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial3
    TextComponent trial3Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial3L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L23
      image = L2.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3TT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trial3Resp
      allowedKeys = 's','k','w','e','a','d','z','x','i','o','j','m',',','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine trial
    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trialL11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL23
      image = L1.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialTT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trialResp
      allowedKeys = 's','k','w','e','a','d','z','x','i','o','j','m',',','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine instruction2
    TextComponent instr2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue.
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    KeyboardComponent keyResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex2
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex2
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex2
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex2
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent instr3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue.
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    KeyboardComponent keyResp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex3
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex3
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex3
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex3
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if condsFile == "vSearch1Cond.xlsx":
            instrText.text = "In this task you will see sets of shapes made of four different shapes as outlined below. Only press the ‘s’ key if you see the upright “T” shape, which is the last shape. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue."
        elif condsFile == "vSearch2Cond.xlsx":
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue."
        elif condsFile == "vSearchCond.xlsx":
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue."
        else:
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue."
    TextComponent instrText
      letterHeight = 0.05
      pos = [0,0.1]
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'vSearch1Cond.xlsx')]),
      OrderedDict([('condsFile', 'vSearch2Cond.xlsx')]),
      OrderedDict([('condsFile', 'vSearch3Cond.xlsx')])]
    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator taskLoop
  Routine end
